PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay_discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today " + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 40, 'future_reward': 78, 'delay': 20},
      {'reward_today': 49, 'future_reward': 61, 'delay': 50},
      {'reward_today': 17, 'future_reward': 84, 'delay': 90},
      {'reward_today': 59, 'future_reward': 89, 'delay': 100},
      {'reward_today': 69, 'future_reward': 112, 'delay': 150},
      {'reward_today': 52, 'future_reward': 67, 'delay': 30},
      {'reward_today': 50, 'future_reward': 59, 'delay': 40},
      {'reward_today': 42, 'future_reward': 52, 'delay': 60},
      {'reward_today': 19, 'future_reward': 109, 'delay': 89},
      {'reward_today': 60, 'future_reward': 66, 'delay': 90},
      {'reward_today': 32, 'future_reward': 69, 'delay': 60},
      {'reward_today': 46, 'future_reward': 52, 'delay': 30},
      {'reward_today': 74, 'future_reward': 124, 'delay': 160},
      {'reward_today': 33, 'future_reward': 41, 'delay': 15},
      {'reward_today': 69, 'future_reward': 90, 'delay': 30},
      {'reward_today': 11, 'future_reward': 24, 'delay': 90},
      {'reward_today': 49, 'future_reward': 79, 'delay': 88},
      {'reward_today': 28, 'future_reward': 33, 'delay': 41},
      {'reward_today': 37, 'future_reward': 69, 'delay': 74},
      {'reward_today': 21, 'future_reward': 44, 'delay': 90},
      {'reward_today': 22, 'future_reward': 41, 'delay': 17},
      {'reward_today': 54, 'future_reward': 76, 'delay': 67},
      {'reward_today': 33, 'future_reward': 58, 'delay': 90},
      {'reward_today': 60, 'future_reward': 112, 'delay': 55},
      {'reward_today': 60, 'future_reward': 91, 'delay': 112},
      {'reward_today': 46, 'future_reward': 63, 'delay': 60},
      {'reward_today': 49, 'future_reward': 86, 'delay': 45}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
    Routine trial
  LoopTerminator trials
