PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = flankers_task_final
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent stimulus
      font = Consolas
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $Stimulus
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $Correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine welcome
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    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome!

        In this task, you will see rows of arrows on the screen.

        Your job is to respond based on the direction of the relevant arrow while ignoring the other arrows (the flankers).
  Routine thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = THANK YOU FOR PARTICIPATING
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trialno', np.int64(1)), ('Condition', 'C'), ('Stimulus', '<<<<<'), ('Target', '<'), ('Correct_resp', 'left')]),
      OrderedDict([('trialno', np.int64(2)), ('Condition', 'C'), ('Stimulus', '>>>>>'), ('Target', '> '), ('Correct_resp', 'right')]),
      OrderedDict([('trialno', np.int64(3)), ('Condition', 'I'), ('Stimulus', '>>><>'), ('Target', '<'), ('Correct_resp', 'left')]),
      OrderedDict([('trialno', np.int64(4)), ('Condition', 'I'), ('Stimulus', '<<><<'), ('Target', '> '), ('Correct_resp', 'right')])]
    Routine trial
  LoopTerminator trials
  Routine thank_you
