PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = word priming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familliar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_rotine
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'Book'},
      {'study_word': 'Cushion'},
      {'study_word': 'Phone'},
      {'study_word': 'Marble'},
      {'study_word': 'Board'},
      {'study_word': 'Laptop'},
      {'study_word': 'Chart'},
      {'study_word': 'T-shirt '},
      {'study_word': 'Mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Cruise'},
      {'study_word': 'Police'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'L_pt_p', 'References': 'Laptop', 'Old_New': 'Old'},
      {'test': '_ha_t', 'References': 'Chart ', 'Old_New': 'Old'},
      {'test': 'T_hi_t', 'References': 'T-shirt', 'Old_New': 'Old'},
      {'test': '_o_se', 'References': 'Mouse', 'Old_New': 'Old'},
      {'test': 'P_s_r_', 'References': 'Pastry', 'Old_New': 'Old'},
      {'test': 'C_s_', 'References': 'Case', 'Old_New': 'Old'},
      {'test': '_ru_s_', 'References': 'Cruise', 'Old_New': 'Old'},
      {'test': 'P_li_e', 'References': 'Police', 'Old_New': 'Old'},
      {'test': 'K_y_', 'References': 'Keys', 'Old_New': 'Old'},
      {'test': 'P_st_r', 'References': 'Poster', 'Old_New': 'Old'},
      {'test': '_o_rd', 'References': 'Board', 'Old_New': 'Old'},
      {'test': '_a_bl_', 'References': 'Marble', 'Old_New': 'Old'},
      {'test': '_ho_e', 'References': 'Phone', 'Old_New': 'Old'},
      {'test': '_oo_', 'References': 'Book', 'Old_New': 'Old'},
      {'test': 'C_s_io_', 'References': 'Cushion', 'Old_New': 'Old'},
      {'test': 'Ta_l_', 'References': 'Table', 'Old_New': 'New'},
      {'test': 'P_nc_l', 'References': 'Pencil', 'Old_New': 'New'},
      {'test': 'V_s_', 'References': 'Vase', 'Old_New': 'New'},
      {'test': 'Bo_t_e', 'References': 'Bottle ', 'Old_New': 'New'},
      {'test': 'C_m_ra', 'References': 'Camera', 'Old_New': 'New'}]
    Routine test_rotine
  LoopTerminator trials_2
